// 小松菜データにdamage(輪郭)を描きdamage種ごとの輝度値で塗りつぶす

  pathdi = "C:/Users/K.Kondo/Desktop/codes/MLtags/inputs/damage_info.csv";	// damage座標・タグ格納のcsvファイルパス
  dirjpg = "C:/Users/K.Kondo/Desktop/codes/MLtags/images/03.bi_image/";		// 二値化小松菜のjpg格納のディレクトリパス
  dircsv = "C:/Users/K.Kondo/Desktop/codes/MLtags/outputs/bi_damage/";		// damage座標のcsv格納のディレクトリパス
  dirsave = "C:/Users/K.Kondo/Desktop/codes/MLtags/images/06.bi_damage/";	// 保存先ディレクトリパス

  str = File.openAsString(pathdi);	// strにdamage_info.csv内容を文字列で格納
  lines = split(str, "\n");		// strを改行で分割し、linesに格納　画像切替指示、wand用x座標、wand用y座標、タグ

  listj = getFileList(dirjpg);	// jpgファイルをリスト化
  listc = getFileList(dircsv);	// csvファイルをリスト化

  filename = newArray(listj.length);

  for (i=0; i<listj.length; i++) {
	name = split(listj[i], ".");		// "."で分割しファイル名を抽出　listcでも可
	filename[i] = name[0];
  }

  for (i=0; i<listj.length; i++) {
     	filej = dirjpg + listj[i];
     	filec = dircsv + listc[i];
	open(filej);		// jpg画像を開く
    	run("Text Image... ", "open=[" + filec + "]");	// csvを画像として開く
	//run("Subtract...", "value=50");

	selectWindow(listj[i]);
	setAutoThreshold("Default dark");
	setThreshold(190, 255);		// 二値化上下限設定
	run("Convert to Mask");		// 二値化実行
	run("Add...", "value=10");

	imageCalculator("Subtract create", listj[i], listc[i]);
	selectWindow("Result of " + listj[i]);
	saveAs("tiff", dirsave + filename[i] + ".tif");
	close("*");
	
  }
  
  j = 0;
  judge = true;
  for (i=0; i<lines.length; i++) {
	di = split(lines[i], ",");
	
	if (judge == true) {
		open(dirsave + filename[j] + ".tif");
	}

	doWand(parseInt(di[1]), parseInt(di[2]));
	run("Fill", "slice");
	doWand(parseInt(di[1]), parseInt(di[2]));
	setColor(parseInt(di[3]));
	fill();
		
	if (di[0] ==1) {
		j++;
		judge = true;
	} else {
		judge = false;
	}
	
	if (judge == true) {
		saveAs("png", dirsave + filename[j - 1] + ".png");
		close("*");
	}
  }
